CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:27
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (directory does contain "Nuclear")
    Name to assign these images:C1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (directory does contain "Ch2")
    Name to assign these images:C2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (directory does contain "Ch3")
    Name to assign these images:C3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (directory does contain "Binary")
    Name to assign these images:Binary
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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
    Select the input image:C1
    Name the output image:C1_Rescaled
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:6|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
    Select the input image:C2
    Name the output image:C2_Rescaled
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:7|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
    Select the input image:C3
    Name the output image:C3_Rescaled
    Rescaling method:Stretch each image to use the full intensity range
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
Resize:[module_num:8|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enabled:False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
    Select the input image:NuclearSegmented
    Name the output image:Nuclear_Resize
    Resizing method:Resize by a fraction or multiple of the original size
    X Resizing factor:4
    Y Resizing factor:4
    Z Resizing factor:1.0
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    Interpolation method:Bicubic
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    Additional image count:0

IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:Binary
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):5,500
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.0000000001
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
ExpandOrShrinkObjects:[module_num:10|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
    Select the input objects:Nuclei
    Name the output objects:Nuclei_Large
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:3
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
Smooth:[module_num:11|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enabled:False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
    Select the input image:C3_Rescaled
    Name the output image:C3_Rescale_Smooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:5
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
IdentifySecondaryObjects:[module_num:12|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
    Select the input objects:Nuclei_Large
    Name the objects to be identified:IdentifySecondaryObjects
    Select the method to identify the secondary objects:Propagation
    Select the input image:C3_Rescaled
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    Regularization factor:5
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:3
    Threshold correction factor:0.5
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
MeasureObjectSizeShape:[module_num:13|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
    Select object sets to measure:IdentifySecondaryObjects
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:14|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
    Select images to measure:C1, C2, C3
    Select objects to measure:IdentifySecondaryObjects

FilterObjects:[module_num:15|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
    Select the objects to filter:IdentifySecondaryObjects
    Name the output objects:Cells_Filtered
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:2000
    Filter using a maximum measurement value?:Yes
    Maximum value:10000
    Select the measurement to filter by:Intensity_MaxIntensity_C1
    Filter using a minimum measurement value?:Yes
    Minimum value:0.0305
    Filter using a maximum measurement value?:No
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
ConvertObjectsToImage:[module_num:16|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
    Select the input objects:Cells_Filtered
    Name the output image:Cells_Binary
    Select the color format:Color
    Select the colormap:Default

SaveImages:[module_num:17|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:Cells_Binary
    Select method for constructing file names:From image filename
    Select image name for file prefix:Binary
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Elsewhere...|Y:\\Bioimaging_Staff\\George\\20240109_Maria_Elia\\SC35_PRPF31\\20240410_Macro_Run_Full\\Binary_Cells_Filtered_V3
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExpandOrShrinkObjects:[module_num:18|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
    Select the input objects:Cells_Filtered
    Name the output objects:Shrunken_Filtered_Cells
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:5
    Fill holes in objects so that all objects shrink to a single point?:No
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
ConvertObjectsToImage:[module_num:19|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
    Select the input objects:Shrunken_Filtered_Cells
    Name the output image:Filtered_Cell_Image
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:20|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
    Select the type of image to save:Image
    Select the image to save:Filtered_Cell_Image
    Select method for constructing file names:From image filename
    Select image name for file prefix:Binary
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Elsewhere...|Y:\\Bioimaging_Staff\\George\\20240109_Maria_Elia\\SC35_PRPF31\\20240410_Macro_Run_Full\\Binary_Cells_Shrunken_V3
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExpandOrShrinkObjects:[module_num:21|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enabled:False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
    Select the input objects:IdentifySecondaryObjects
    Name the output objects:Cells
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:2
    Fill holes in objects so that all objects shrink to a single point?:No
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
ConvertObjectsToImage:[module_num:22|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enabled:False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
    Select the input objects:Cells
    Name the output image:CellImage
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:23|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:CellImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:Binary
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Elsewhere...|Y:\\Bioimaging_Staff\\George\\20240109_Maria_Elia\\SC35_PRPF31\\Macro_Testing\\Binary_Cells_V3
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

GrayToColor:[module_num:24|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enabled:False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
    Select a color scheme:RGB
    Rescale intensity:No
    Select the image to be colored red:C3_Rescaled
    Select the image to be colored green:C2_Rescaled
    Select the image to be colored blue:C1_Rescaled
    Name the output image:tissue
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
OverlayOutlines:[module_num:25|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:tissue
    Name the output image:Segmentation_Checker
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#12FA05
    Select objects to display:Nuclei
    Select outline color:white
    Select objects to display:IdentifySecondaryObjects

ExportToSpreadsheet:[module_num:26|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enabled:False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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|Y:\\Bioimaging_Staff\\George\\Jenny_Lumley\\20230321_Necroptosis\\20231002_Macro_Testing\\CP_Outputs
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:IdentifySecondaryObjects|AreaShape_Solidity,IdentifySecondaryObjects|AreaShape_MedianRadius,IdentifySecondaryObjects|AreaShape_BoundingBoxMaximum_X,IdentifySecondaryObjects|AreaShape_BoundingBoxMaximum_Y,IdentifySecondaryObjects|AreaShape_BoundingBoxArea,IdentifySecondaryObjects|AreaShape_MaximumRadius,IdentifySecondaryObjects|AreaShape_BoundingBoxMinimum_Y,IdentifySecondaryObjects|AreaShape_BoundingBoxMinimum_X,IdentifySecondaryObjects|AreaShape_Center_X,IdentifySecondaryObjects|AreaShape_Center_Y,IdentifySecondaryObjects|AreaShape_MaxFeretDiameter,IdentifySecondaryObjects|AreaShape_Extent,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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
SaveImages:[module_num:27|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:Segmentation_Checker
    Select method for constructing file names:From image filename
    Select image name for file prefix:C1
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    Append a suffix to the image file name?:No
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    Saved file format:jpeg
    Output file location:Elsewhere...|Y:\\Bioimaging_Staff\\George\\20240109_Maria_Elia\\SC35_PRPF31\\Macro_Testing\\CP_Outputs\\Segmentation_Checker_V3
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
